<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:port="clr-namespace:Bonsai.IO.Ports;assembly=Bonsai.System"
                 xmlns:p1="clr-namespace:Bonsai.PointGrey;assembly=Bonsai.PointGrey"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:ipy="clr-namespace:Bonsai.Scripting.IronPython;assembly=Bonsai.Scripting.IronPython"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:mx="clr-namespace:Bonsai.DAQmx;assembly=Bonsai.DAQmx"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:ard="clr-namespace:Bonsai.Arduino;assembly=Bonsai.Arduino"
                 xmlns:osc="clr-namespace:Bonsai.Osc;assembly=Bonsai.Osc"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="port:CreateSerialPort">
          <port:PortName>COM15</port:PortName>
          <port:BaudRate>12000000</port:BaudRate>
          <port:NewLine>\r\n</port:NewLine>
          <port:Parity>None</port:Parity>
          <port:ParityReplace>63</port:ParityReplace>
          <port:DataBits>8</port:DataBits>
          <port:StopBits>One</port:StopBits>
          <port:Handshake>None</port:Handshake>
          <port:DiscardNull>false</port:DiscardNull>
          <port:DtrEnable>true</port:DtrEnable>
          <port:RtsEnable>false</port:RtsEnable>
          <port:ReadBufferSize>4096</port:ReadBufferSize>
          <port:WriteBufferSize>2048</port:WriteBufferSize>
          <port:ReceivedBytesThreshold>1</port:ReceivedBytesThreshold>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:FlyCapture">
          <p1:Index>0</p1:Index>
          <p1:ColorProcessing>Default</p1:ColorProcessing>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>F:\rawvideos\rawvideo.avi</cv:FileName>
          <cv:Suffix>Timestamp</cv:Suffix>
          <cv:Buffered>true</cv:Buffered>
          <cv:Overwrite>false</cv:Overwrite>
          <cv:FourCC>DIVX</cv:FourCC>
          <cv:FrameRate>80</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:ConvertColor">
          <cv:Conversion>Rgb2Hsv</cv:Conversion>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:HsvThreshold">
          <cv:Lower>
            <cv:Val0>110</cv:Val0>
            <cv:Val1>120</cv:Val1>
            <cv:Val2>0</cv:Val2>
            <cv:Val3>0</cv:Val3>
          </cv:Lower>
          <cv:Upper>
            <cv:Val0>130</cv:Val0>
            <cv:Val1>255</cv:Val1>
            <cv:Val2>255</cv:Val2>
            <cv:Val3>0</cv:Val3>
          </cv:Upper>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FindContours">
          <cv:Mode>External</cv:Mode>
          <cv:Method>ChainApproxNone</cv:Method>
          <cv:Offset>
            <cv:X>0</cv:X>
            <cv:Y>0</cv:Y>
          </cv:Offset>
          <cv:MinArea>100</cv:MinArea>
          <cv:MaxArea xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:BinaryRegionAnalysis" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:LargestBinaryRegion" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Centroid.X</Selector>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Script>globalx = 0
import math

@returns(int)
def process(value):
  global globalx
  if math.isnan(value) == True:
    x = globalx
  if value == 0:
    x = globalx
  if math.isnan(value) == False:
    if value != 0:
      x = value
      globalx = x
  return x</ipy:Script>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Centroid.Y</Selector>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Script>globaly = 0
import math

@returns(int)
def process(value):
  global globaly
  if math.isnan(value) == True:
    y = globaly
  if value == 0:
    y = globaly
  if math.isnan(value) == False:
    if value != 0:
      y = value
      globaly = y
  return y</ipy:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Grayscale" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Threshold">
          <cv:ThresholdValue>21</cv:ThresholdValue>
          <cv:MaxValue>255</cv:MaxValue>
          <cv:ThresholdType>BinaryInv</cv:ThresholdType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FindContours">
          <cv:Mode>External</cv:Mode>
          <cv:Method>ChainApproxNone</cv:Method>
          <cv:Offset>
            <cv:X>0</cv:X>
            <cv:Y>0</cv:Y>
          </cv:Offset>
          <cv:MinArea>100</cv:MinArea>
          <cv:MaxArea xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:BinaryRegionAnalysis" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:LargestBinaryRegion" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:BinaryRegionExtremes">
          <cv:Method>MajorAxis</cv:Method>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item1</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>X</Selector>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Script>globalx = 0
import math

@returns(int)
def process(value):
  global globalx
  if math.isnan(value) == True:
    x = globalx
  if value == 0:
    x = globalx
  if math.isnan(value) == False:
    if value != 0:
      x = value
      globalx = x
  return x</ipy:Script>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Y</Selector>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Script>globaly = 0
import math

@returns(int)
def process(value):
  global globaly
  if math.isnan(value) == True:
    y = globaly
  if value == 0:
    y = globaly
  if math.isnan(value) == False:
    if value != 0:
      y = value
      globaly = y
  return y</ipy:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item2</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>X</Selector>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Script>globalx = 0
import math

@returns(int)
def process(value):
  global globalx
  if math.isnan(value) == True:
    x = globalx
  if value == 0:
    x = globalx
  if math.isnan(value) == False:
    if value != 0:
      x = value
      globalx = x
  return x</ipy:Script>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Y</Selector>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Script>globaly = 0
import math

@returns(int)
def process(value):
  global globaly
  if math.isnan(value) == True:
    y = globaly
  if value == 0:
    y = globaly
  if math.isnan(value) == False:
    if value != 0:
      y = value
      globaly = y
  return y</ipy:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Script>globalx = 0
import math

@returns(int)
def process(value):
  global globalx
  headx = value.Item1.Item1
  heady = value.Item1.Item2
  extreme1_x = value.Item2.Item1
  extreme1_y = value.Item2.Item2
  extreme2_x = value.Item3.Item1
  extreme2_y = value.Item3.Item2

  distance1 = (extreme1_x - headx)*(extreme1_x - headx) + (extreme1_y - heady)*(extreme1_y - heady)
  distance2 = (extreme2_x - headx)*(extreme2_x - headx) + (extreme2_y - heady)*(extreme2_y - heady)
  if distance2 &gt; distance1: 
    nosepositionx = extreme1_x
  elif distance1 &gt; distance2:
    nosepositionx = extreme2_x
  else: nosepositionx = globalx
  globalx = nosepositionx
  return nosepositionx</ipy:Script>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Script>globaly = 0
import math

@returns(int)
def process(value):
  global globaly
  headx = value.Item1.Item1
  heady = value.Item1.Item2
  extreme1_x = value.Item2.Item1
  extreme1_y = value.Item2.Item2
  extreme2_x = value.Item3.Item1
  extreme2_y = value.Item3.Item2

  distance1 = (extreme1_x - headx)*(extreme1_x - headx) + (extreme1_y - heady)*(extreme1_y - heady)
  distance2 = (extreme2_x - headx)*(extreme2_x - headx) + (extreme2_y - heady)*(extreme2_y - heady)
  if distance2 &gt; distance1: 
    nosepositiony = extreme1_y
  elif distance1 &gt; distance2:
    nosepositiony = extreme2_y
  else: nosepositiony = globaly
  globaly = nosepositiony
  return nosepositiony</ipy:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Centroid.X</Selector>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Script>globalx = 0
import math

@returns(int)
def process(value):
  global globalx
  if math.isnan(value) == True:
    x = globalx
  if value == 0:
    x = globalx
  if math.isnan(value) == False:
    if value != 0:
      x = value
      globalx = x
  return x</ipy:Script>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Centroid.Y</Selector>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Script>globaly = 0
import math

@returns(int)
def process(value):
  global globaly
  if math.isnan(value) == True:
    y = globaly
  if value == 0:
    y = globaly
  if math.isnan(value) == False:
    if value != 0:
      y = value
      globaly = y
  return y</ipy:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Script>import clr
clr.AddReference("OpenCV.Net")
from OpenCV.Net import *

#nosecolor = Scalar.Rgb(255,0,0)
headcolor = Scalar.Rgb(0,255,0)
comcolor = Scalar.Rgb(0,0,255)
linecolor = Scalar.Rgb(150,150,150)
orientationcolor = Scalar.Rgb(150,150,150)
linethickness = 1
circleradius = 10



@returns(IplImage)
def process(value):

  nosecolor = Scalar.Rgb(255,0,0)
  state = ''

  image = value.Item1
  nose1 = value.Item2.Item1
  nose2 = value.Item2.Item2
  head1 = value.Item3.Item1
  head2 = value.Item3.Item2
  com1 = value.Item4.Item1
  com2 = value.Item4.Item2

  height = image.Size.Height
  width = image.Size.Width

  # Define Trial decision sectors
  y_midpt = int(height/2)
  decision_x = int(width*.66)
  y_midline = (Point(decision_x, y_midpt), Point(width, y_midpt))
  decision_line = (Point(decision_x, 0), Point(decision_x, height))

  # Indicate which sector mouse nose is in
  if nose1 &lt; decision_x:
    if nose2 &gt; y_midpt:
      nosecolor = Scalar.Rgb(255,255,0)
      state = 'left'
    elif nose2 &lt; y_midpt:
      nosecolor = Scalar.Rgb(0,255,255)
      state = 'right'

  # Draw decision sectors
  CV.Line(image,y_midline[0],y_midline[1],Scalar.Rgb(0,0,0),thickness = 5)
  CV.Line(image,decision_line[0],decision_line[1],Scalar.Rgb(0,0,0), thickness = 5)

  # Skeleton
  CV.Line(image,Point(nose1,nose2),Point(head1,head2),orientationcolor,thickness = 2)
  CV.Line(image,Point(com1,com2),Point(head1,head2),orientationcolor,thickness = 2)


  
  # Mouse Points
  CV.Circle(image,Point(nose1,nose2),circleradius,nosecolor,-1)
  CV.Circle(image,Point(head1,head2),circleradius,headcolor,-1)
  CV.Circle(image,Point(com1,com2),circleradius,comcolor,-1)
 
  return image
</ipy:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>LocalDateTime.TimeOfDay.TotalSeconds</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:TextWriter">
          <io:FileName>D:\rawvideo.txt</io:FileName>
          <io:Suffix>None</io:Suffix>
          <io:Buffered>true</io:Buffered>
          <io:Overwrite>true</io:Overwrite>
          <io:Append>true</io:Append>
        </Combinator>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Script># Send byte to MATLAB to indicate a left or right decision

#@returns(str)
def process(value):

  state = ''
  softcode = 0

  # Load in values from zip
  image = value.Item1
  nose_x = value.Item2.Item1
  nose_y = value.Item2.Item2

  # Get image dims
  height = image.Size.Height
  width = image.Size.Width

  # Define Trial decision sectors
  y_midpt = int(height/2)
  decision_x = int(width*.66)

  # Indicate which sector mouse nose is in
  if nose_x &gt; decision_x:
    if nose_y &lt; y_midpt:
      state = 'left'
      softcode = 1
    elif nose_y &gt; y_midpt:
      state = 'right'
      softcode = 3
  else:
      state = 'initiation'
      softcode = 2

  return state, softcode
</ipy:Script>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Script>@returns(int)
def process(value):
  return value[1]</ipy:Script>
      </Expression>
      <Expression xsi:type="InputMapping">
        <PropertyMappings>
          <Property Name="Value" Selector="it" />
        </PropertyMappings>
        <Selector />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ByteProperty">
          <Value>2</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>Send Softcode</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeLast">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ToArray" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="port:SerialWrite">
                <port:PortName>COM15</port:PortName>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="mx:AnalogInput">
          <mx:SignalSource />
          <mx:SampleRate>800</mx:SampleRate>
          <mx:ActiveEdge>Rising</mx:ActiveEdge>
          <mx:SampleMode>ContinuousSamples</mx:SampleMode>
          <mx:BufferSize>1000</mx:BufferSize>
          <mx:SamplesPerChannel xsi:nil="true" />
          <mx:Channels>
            <mx:AnalogInputChannelConfiguration>
              <mx:ChannelName />
              <mx:MinimumValue>-10</mx:MinimumValue>
              <mx:MaximumValue>10</mx:MaximumValue>
              <mx:PhysicalChannel>poke_daq/ai0</mx:PhysicalChannel>
              <mx:TerminalConfiguration>Differential</mx:TerminalConfiguration>
              <mx:VoltageUnits>Volts</mx:VoltageUnits>
            </mx:AnalogInputChannelConfiguration>
            <mx:AnalogInputChannelConfiguration>
              <mx:ChannelName />
              <mx:MinimumValue>-10</mx:MinimumValue>
              <mx:MaximumValue>10</mx:MaximumValue>
              <mx:PhysicalChannel>poke_daq/ai1</mx:PhysicalChannel>
              <mx:TerminalConfiguration>Differential</mx:TerminalConfiguration>
              <mx:VoltageUnits>Volts</mx:VoltageUnits>
            </mx:AnalogInputChannelConfiguration>
            <mx:AnalogInputChannelConfiguration>
              <mx:ChannelName />
              <mx:MinimumValue>-10</mx:MinimumValue>
              <mx:MaximumValue>10</mx:MaximumValue>
              <mx:PhysicalChannel>poke_daq/ai2</mx:PhysicalChannel>
              <mx:TerminalConfiguration>Differential</mx:TerminalConfiguration>
              <mx:VoltageUnits>Volts</mx:VoltageUnits>
            </mx:AnalogInputChannelConfiguration>
          </mx:Channels>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:MatrixWriter">
          <dsp:Path>D:\NiDAQ_poke.dat</dsp:Path>
          <dsp:Suffix>None</dsp:Suffix>
          <dsp:Overwrite>true</dsp:Overwrite>
          <dsp:Layout>ColumnMajor</dsp:Layout>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="mx:AnalogInput">
          <mx:SignalSource />
          <mx:SampleRate>800</mx:SampleRate>
          <mx:ActiveEdge>Rising</mx:ActiveEdge>
          <mx:SampleMode>ContinuousSamples</mx:SampleMode>
          <mx:BufferSize>1000</mx:BufferSize>
          <mx:SamplesPerChannel xsi:nil="true" />
          <mx:Channels>
            <mx:AnalogInputChannelConfiguration>
              <mx:ChannelName />
              <mx:MinimumValue>-10</mx:MinimumValue>
              <mx:MaximumValue>10</mx:MaximumValue>
              <mx:PhysicalChannel>sniff_daq/ai0</mx:PhysicalChannel>
              <mx:TerminalConfiguration>Differential</mx:TerminalConfiguration>
              <mx:VoltageUnits>Volts</mx:VoltageUnits>
            </mx:AnalogInputChannelConfiguration>
            <mx:AnalogInputChannelConfiguration>
              <mx:ChannelName />
              <mx:MinimumValue>-10</mx:MinimumValue>
              <mx:MaximumValue>10</mx:MaximumValue>
              <mx:PhysicalChannel>sniff_daq/ai1</mx:PhysicalChannel>
              <mx:TerminalConfiguration>Differential</mx:TerminalConfiguration>
              <mx:VoltageUnits>Volts</mx:VoltageUnits>
            </mx:AnalogInputChannelConfiguration>
            <mx:AnalogInputChannelConfiguration>
              <mx:ChannelName />
              <mx:MinimumValue>-10</mx:MinimumValue>
              <mx:MaximumValue>10</mx:MaximumValue>
              <mx:PhysicalChannel>sniff_daq/ai2</mx:PhysicalChannel>
              <mx:TerminalConfiguration>Differential</mx:TerminalConfiguration>
              <mx:VoltageUnits>Volts</mx:VoltageUnits>
            </mx:AnalogInputChannelConfiguration>
            <mx:AnalogInputChannelConfiguration>
              <mx:ChannelName />
              <mx:MinimumValue>-10</mx:MinimumValue>
              <mx:MaximumValue>10</mx:MaximumValue>
              <mx:PhysicalChannel>sniff_daq/ai3</mx:PhysicalChannel>
              <mx:TerminalConfiguration>Differential</mx:TerminalConfiguration>
              <mx:VoltageUnits>Volts</mx:VoltageUnits>
            </mx:AnalogInputChannelConfiguration>
          </mx:Channels>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:MatrixWriter">
          <dsp:Path>D:\NiDAQ_sniff.dat</dsp:Path>
          <dsp:Suffix>None</dsp:Suffix>
          <dsp:Overwrite>true</dsp:Overwrite>
          <dsp:Layout>ColumnMajor</dsp:Layout>
        </Combinator>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="ard:CreateArduino">
            <ard:Name>fmos_arduino</ard:Name>
            <ard:PortName>COM17</ard:PortName>
            <ard:BaudRate>57600</ard:BaudRate>
            <ard:SamplingInterval>1</ard:SamplingInterval>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="ard:DigitalInput">
            <ard:PortName>COM17</ard:PortName>
            <ard:Pin>22</ard:Pin>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="ard:InputPullUp">
            <ard:PortName>fmos_arduino</ard:PortName>
            <ard:Pin>22</ard:Pin>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="osc:CreateTcpClient">
            <osc:Name>MATLAB</osc:Name>
            <osc:HostName>localhost</osc:HostName>
            <osc:Port>11235</osc:Port>
            <osc:NoDelay>true</osc:NoDelay>
          </Combinator>
        </Builder>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="2" To="14" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="3" To="41" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="8" To="11" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="13" Label="Source1" />
      <Edge From="10" To="43" Label="Source3" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source2" />
      <Edge From="12" To="43" Label="Source4" />
      <Edge From="13" To="32" Label="Source1" />
      <Edge From="13" To="41" Label="Source3" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="18" To="36" Label="Source1" />
      <Edge From="18" To="38" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="19" To="26" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="20" To="23" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="25" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source2" />
      <Edge From="25" To="32" Label="Source2" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="26" To="29" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="31" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="30" To="31" Label="Source2" />
      <Edge From="31" To="32" Label="Source3" />
      <Edge From="32" To="33" Label="Source1" />
      <Edge From="32" To="34" Label="Source1" />
      <Edge From="33" To="35" Label="Source1" />
      <Edge From="33" To="43" Label="Source1" />
      <Edge From="34" To="35" Label="Source2" />
      <Edge From="34" To="43" Label="Source2" />
      <Edge From="35" To="41" Label="Source2" />
      <Edge From="36" To="37" Label="Source1" />
      <Edge From="37" To="40" Label="Source1" />
      <Edge From="37" To="43" Label="Source5" />
      <Edge From="38" To="39" Label="Source1" />
      <Edge From="39" To="40" Label="Source2" />
      <Edge From="39" To="43" Label="Source6" />
      <Edge From="40" To="41" Label="Source4" />
      <Edge From="41" To="42" Label="Source1" />
      <Edge From="41" To="48" Label="Source1" />
      <Edge From="43" To="44" Label="Source1" />
      <Edge From="44" To="45" Label="Source1" />
      <Edge From="45" To="46" Label="Source1" />
      <Edge From="46" To="47" Label="Source1" />
      <Edge From="48" To="49" Label="Source1" />
      <Edge From="49" To="50" Label="Source1" />
      <Edge From="50" To="51" Label="Source1" />
      <Edge From="51" To="52" Label="Source1" />
      <Edge From="53" To="54" Label="Source1" />
      <Edge From="55" To="56" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>