<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:osc="clr-namespace:Bonsai.Osc;assembly=Bonsai.Osc"
                 xmlns:p1="clr-namespace:Bonsai.PointGrey;assembly=Bonsai.PointGrey"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="osc:CreateTcpClient">
          <osc:Name>MATLAB</osc:Name>
          <osc:HostName>localhost</osc:HostName>
          <osc:Port>11235</osc:Port>
          <osc:NoDelay>false</osc:NoDelay>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:FlyCapture">
          <p1:Index>0</p1:Index>
          <p1:ColorProcessing>Default</p1:ColorProcessing>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Grayscale" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Threshold">
          <cv:ThresholdValue>128</cv:ThresholdValue>
          <cv:MaxValue>255</cv:MaxValue>
          <cv:ThresholdType>Binary</cv:ThresholdType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FindContours">
          <cv:Mode>External</cv:Mode>
          <cv:Method>ChainApproxNone</cv:Method>
          <cv:Offset>
            <cv:X>0</cv:X>
            <cv:Y>0</cv:Y>
          </cv:Offset>
          <cv:MinArea>100</cv:MinArea>
          <cv:MaxArea xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:BinaryRegionAnalysis" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:LargestBinaryRegion" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Centroid.X</Selector>
      </Expression>
      <Expression xsi:type="GreaterThan">
        <Operand xsi:type="FloatProperty">
          <Value>300</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:DistinctUntilChanged" />
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>OnlyTrue</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>5</scr:Expression>
      </Expression>
      <Expression xsi:type="osc:SendMessage">
        <osc:Connection>MATLAB</osc:Connection>
        <osc:Address>/</osc:Address>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>